CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder|None
    Check image sets for missing or duplicate files?:Yes
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:1
    Text that these images have in common (case-sensitive):C001
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:DNA
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    Rescale intensities?:Yes

IdentifyPrimaryObjects:[module_num:2|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:15
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:No
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Handling of objects if excessive number of objects identified:Continue
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
MeasureObjectIntensity:[module_num:3|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
    Hidden:1
    Select an image to measure:DNA
    Select objects to measure:Nuclei

MeasureObjectSizeShape:[module_num:4|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:Yes

MeasureObjectNeighbors:[module_num:5|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
    Select objects to measure:Nuclei
    Method to determine neighbors:Expand until adjacent
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    Retain the image of objects colored by numbers of neighbors for use later in the pipeline (for example, in SaveImages)?:No
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    Retain the image of objects colored by percent of touching pixels for use later in the pipeline (for example, in SaveImages)?:No
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
ExportToSpreadsheet:[module_num:6|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:Yes
    Press button to select measurements to export:Nuclei|Intensity_IntegratedIntensity_DNA
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
ExportToDatabase:[module_num:7|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|None
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object or a single object table?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Hidden:1
    Hidden:1
    Hidden:0
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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