CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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notes:['']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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:All
    Input image file location:Default Input Folder|.
    Check image sets for missing or duplicate files?:No
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:2
    Text that these images have in common (case-sensitive):C001
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:DNA
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):C002
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:dye
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    Rescale intensities?:Yes

IdentifyPrimaryObjects:[module_num:2|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notes:['']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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:5
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucOutlines
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Handling of objects if excessive number of objects identified:Continue
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
MeasureObjectIntensity:[module_num:3|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notes:['Intensity of nuclei']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
    Hidden:1
    Select an image to measure:dye
    Select objects to measure:Nuclei

DisplayDataOnImage:[module_num:4|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notes:['']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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Intensity_MeanIntensity_dye
    Select the image on which to display the measurements:dye
    Text color:green
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):12
    Number of decimals:5
    Image elements to save:Image

ClassifyObjects:[module_num:5|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notes:['']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
    Should each classification decision be based on a single measurement or on the combination of a pair of measurements?:Single measurement
    Hidden:3
    Select the object to be classified:Nuclei
    Select the measurement to classify by:Intensity_MeanIntensity_dye
    Select bin spacing:Custom-defined bins
    Number of bins:20
    Lower threshold:0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:0.5
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0.1
    Give each bin a name?:No
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    Retain an image of the objects classified by their measurements, for use later in the pipeline (for example, in SaveImages)?:No
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    Select the object to be classified:Nuclei
    Select the measurement to classify by:Intensity_MeanIntensity_dye
    Select bin spacing:Evenly spaced bins
    Number of bins:10
    Lower threshold:0
    Use a bin for objects below the threshold?:No
    Upper threshold:1
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the objects classified by their measurements, for use later in the pipeline (for example, in SaveImages)?:No
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    Select the object to be classified:Nuclei
    Select the measurement to classify by:Intensity_MeanIntensity_dye
    Select bin spacing:Evenly spaced bins
    Number of bins:50
    Lower threshold:0
    Use a bin for objects below the threshold?:No
    Upper threshold:1
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the objects classified by their measurements, for use later in the pipeline (for example, in SaveImages)?:No
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the objects classified by their measurements, for use later in the pipeline (for example, in SaveImages)?:No
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
FilterObjects:[module_num:6|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notes:['The last approach is to filter the nuclei on the basis of the number of PH3 children. The number of PH3-positive nuclei is the same as before, but in this case, the filtered nuclei can be used downstream for further analysis.']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
    Name the output objects:positives
    Select the object to filter:Nuclei
    Filter using classifier rules or measurements?:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
    Select the measurement to filter by:Intensity_MeanIntensity_dye
    Filter using a minimum measurement value?:Yes
    Minimum value:0.25
    Filter using a maximum measurement value?:No
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
CalculateMath:[module_num:7|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notes:['']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
    Name the output measurement:PercentPositive
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_positives
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_Nuclei
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:1
    Raise the power of result by:1

IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DNA
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    Number of pixels by which to expand the primary objects:10
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    Retain outlines of the identified secondary objects?:No
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    Discard secondary objects that touch the edge of the image?:No
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    Fill holes in identified objects?:Yes

IdentifyTertiaryObjects:[module_num:9|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No

MeasureObjectIntensity:[module_num:10|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
    Hidden:1
    Select an image to measure:dye
    Select objects to measure:Cytoplasm

DisplayDataOnImage:[module_num:11|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
    Display object or image measurements?:Object
    Select the input objects:Cytoplasm
    Measurement to display:Intensity_MeanIntensity_dye
    Select the image on which to display the measurements:dye
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image

ClassifyObjects:[module_num:12|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
    Should each classification decision be based on a single measurement or on the combination of a pair of measurements?:Single measurement
    Hidden:1
    Select the object to be classified:Cytoplasm
    Select the measurement to classify by:Intensity_MedianIntensity_dye
    Select bin spacing:Evenly spaced bins
    Number of bins:10
    Lower threshold:0
    Use a bin for objects below the threshold?:No
    Upper threshold:0.3
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the objects classified by their measurements, for use later in the pipeline (for example, in SaveImages)?:No
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the objects classified by their measurements, for use later in the pipeline (for example, in SaveImages)?:No
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
ExportToSpreadsheet:[module_num:13|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|None
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:Yes
    Press button to select measurements to export:Nuclei|Intensity_MeanIntensity_dye,Nuclei|Intensity_MeanIntensityEdge_dye
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:_intensity
    Select file format to use:bmp
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:No
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes

ExportToDatabase:[module_num:15|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|None
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object or a single object table?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Hidden:1
    Hidden:1
    Hidden:0
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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